PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emotional stroop
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent word_stim
      color [set every repeat] = $font_color
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','p','b','y',
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine instruction
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    TextComponent instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        You will see words presented in different colours.
        Your task is to IGNORE the meaning of the word
        and respond ONLY to the COLOUR of the ink.

        Press:
        R = Red
        P = Pink
        B = Blue
        Y = Yellow

        Please respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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  Routine end_2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the experiment.
        Thank you for your participation!
    KeyboardComponent key_resp_5
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The next block will now begin.

        The instructions remain the same:
        Respond to the COLOUR of the word, not the meaning.

        Press SPACE to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions3
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Final block.

        Continue responding to the COLOUR of the words.
        Try to respond as quickly and accurately as possible.

        Press SPACE to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator neutral_pre loopType="TrialHandler"
    conditionsFile = neutral1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'can'), ('font_color', 'red'), ('correct_resp', 'r'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'box'), ('font_color', 'blue'), ('correct_resp', 'b'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'key'), ('font_color', 'pink'), ('correct_resp', 'p'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'ten'), ('font_color', 'yellow'), ('correct_resp', 'y'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'bed'), ('font_color', 'red'), ('correct_resp', 'r'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'cup'), ('font_color', 'blue'), ('correct_resp', 'b'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'sum'), ('font_color', 'pink'), ('correct_resp', 'p'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'pot'), ('font_color', 'yellow'), ('correct_resp', 'y'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'bud'), ('font_color', 'red'), ('correct_resp', 'r'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'pie'), ('font_color', 'blue'), ('correct_resp', 'b'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'fur'), ('font_color', 'pink'), ('correct_resp', 'p'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'mop'), ('font_color', 'yellow'), ('correct_resp', 'y'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'time'), ('font_color', 'red'), ('correct_resp', 'r'), ('Category', 'neutral_per')]),
      OrderedDict([('word', 'take'), ('font_color', 'blue'), ('correct_resp', 'b'), ('Category', 'neutral_per')])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
    Routine trial
  LoopTerminator neutral_pre
  Routine instruction2
  LoopInitiator emotional loopType="TrialHandler"
    conditionsFile = emotional.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'war'), ('font_color', 'red'), ('correct_resp', 'r'), ('category', 'emotional')]),
      OrderedDict([('word', 'low'), ('font_color', 'blue'), ('correct_resp', 'b'), ('category', 'emotional')]),
      OrderedDict([('word', 'die'), ('font_color', 'pink'), ('correct_resp', 'p'), ('category', 'emotional')]),
      OrderedDict([('word', 'mad'), ('font_color', 'yellow'), ('correct_resp', 'y'), ('category', 'emotional')]),
      OrderedDict([('word', 'sin'), ('font_color', 'red'), ('correct_resp', 'r'), ('category', 'emotional')]),
      OrderedDict([('word', 'sad'), ('font_color', 'blue'), ('correct_resp', 'b'), ('category', 'emotional')]),
      OrderedDict([('word', 'mud'), ('font_color', 'pink'), ('correct_resp', 'p'), ('category', 'emotional')]),
      OrderedDict([('word', 'ill'), ('font_color', 'yellow'), ('correct_resp', 'y'), ('category', 'emotional')]),
      OrderedDict([('word', 'spy'), ('font_color', 'red'), ('correct_resp', 'r'), ('category', 'emotional')]),
      OrderedDict([('word', 'shy'), ('font_color', 'blue'), ('correct_resp', 'b'), ('category', 'emotional')]),
      OrderedDict([('word', 'pox'), ('font_color', 'pink'), ('correct_resp', 'p'), ('category', 'emotional')]),
      OrderedDict([('word', 'mean'), ('font_color', 'yellow'), ('correct_resp', 'y'), ('category', 'emotional')]),
      OrderedDict([('word', 'dead'), ('font_color', 'red'), ('correct_resp', 'r'), ('category', 'emotional')]),
      OrderedDict([('word', 'kill'), ('font_color', 'blue'), ('correct_resp', 'b'), ('category', 'emotional')])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
    Routine trial
  LoopTerminator emotional
  Routine instructions3
  LoopInitiator neutral_post loopType="TrialHandler"
    conditionsFile = neutral2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'can'), ('font_color', 'red'), ('correct_resp', 'r'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'box'), ('font_color', 'blue'), ('correct_resp', 'b'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'key'), ('font_color', 'pink'), ('correct_resp', 'p'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'ten'), ('font_color', 'yellow'), ('correct_resp', 'y'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'bed'), ('font_color', 'red'), ('correct_resp', 'r'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'cup'), ('font_color', 'blue'), ('correct_resp', 'b'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'sum'), ('font_color', 'pink'), ('correct_resp', 'p'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'pot'), ('font_color', 'yellow'), ('correct_resp', 'y'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'bud'), ('font_color', 'red'), ('correct_resp', 'r'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'pie'), ('font_color', 'blue'), ('correct_resp', 'b'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'fur'), ('font_color', 'pink'), ('correct_resp', 'p'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'mop'), ('font_color', 'yellow'), ('correct_resp', 'y'), ('category', 'neutral_post')]),
      OrderedDict([('word', 'time'), ('font_color', 'red'), ('correct_resp', 'r'), ('category', 'neutral_post')])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
    Routine trial
  LoopTerminator neutral_post
  Routine end_2
