PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop task final
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome

        In this task, you will see words presented in different colors. You should ignore the world and respond  to the color of the text as quickly and accurately as possible.

         Press a key accoarding text color :

        Press R if the color is Red

         Press B if the color is Blue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thankyou
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'stim_condition': 'c', 'correct_res': 'r'},
      {'word': 'RED', 'colour': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'BLUE', 'colour': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'BLUE', 'colour': 'blue', 'stim_condition': 'c', 'correct_res': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine Thanks
