PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = word priming
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent Testtext
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent text_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Study_word.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Study_word', 'book')]),
      OrderedDict([('Study_word', 'cushion')]),
      OrderedDict([('Study_word', 'phone')]),
      OrderedDict([('Study_word', 'marble')]),
      OrderedDict([('Study_word', 'board')]),
      OrderedDict([('Study_word', 'Laptop')]),
      OrderedDict([('Study_word', 'Chart')]),
      OrderedDict([('Study_word', 'T-shirt')]),
      OrderedDict([('Study_word', 'mouse')]),
      OrderedDict([('Study_word', 'Pastry')]),
      OrderedDict([('Study_word', 'Case')]),
      OrderedDict([('Study_word', 'Cruise')]),
      OrderedDict([('Study_word', 'Police')]),
      OrderedDict([('Study_word', 'Keys')]),
      OrderedDict([('Study_word', 'Poster')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'l_pt_p'), ('Refence', 'Laptop'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', '_ha_t'), ('Refence', 'Chart'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', 'T_hi_r'), ('Refence', 'Tshirt'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', '_ou_se'), ('Refence', 'mouse'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', 'P_as_tr_'), ('Refence', 'Pastry'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', 'c_s_'), ('Refence', 'Case'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', '_ru_is_'), ('Refence', 'Cruise'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', 'P_li_e'), ('Refence', 'Police'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', 'K_y_'), ('Refence', 'Keys'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', 'P_st_r'), ('Refence', 'Poster'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', '_o_rd'), ('Refence', 'Board'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', '_a_ble_'), ('Refence', 'Marble'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', '_ho_e'), ('Refence', 'Phone'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', '_oo_'), ('Refence', 'Book'), ('Old_new', 'Old')]),
      OrderedDict([('test_word', 'c_s_io_'), ('Refence', 'Cushion '), ('Old_new', 'Old')]),
      OrderedDict([('test_word', 'ta_l_'), ('Refence', 'Table'), ('Old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('Refence', 'Pencil'), ('Old_new', 'new')]),
      OrderedDict([('test_word', 'V_s_'), ('Refence', 'Vase'), ('Old_new', 'new')])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
    Routine test
  LoopTerminator trials_2
